PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Memory Experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our Experiment.

        Press SPACE to Continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyTrial
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    TextComponent textstudy
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $stim_word
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  Routine TestTrial
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    TextComponent texttest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_word
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      correctAns = $yn_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Instruction
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Get ready for the TEST.

        If the word was present in the list press Y
        If the word was not present in the list press N

        Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  LoopInitiator trialsStudy loopType="TrialHandler"
    conditionsFile = data/SOLO PROJECT/Memory study.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_word': 'phone'},
      {'stim_word': 'laptop'},
      {'stim_word': 'car '},
      {'stim_word': 'bike'},
      {'stim_word': 'apple'},
      {'stim_word': 'orange'},
      {'stim_word': 'sun'},
      {'stim_word': 'moon'},
      {'stim_word': 'earth'},
      {'stim_word': 'mercury'}]
    Routine StudyTrial
  LoopTerminator trialsStudy
  Routine Instruction
  LoopInitiator trialsTest loopType="TrialHandler"
    conditionsFile = data/SOLO PROJECT/Memory test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_word': 'phone', 'old_new': 'old', 'yn_keys': 'y'},
      {'stim_word': 'laptop', 'old_new': 'old', 'yn_keys': 'y'},
      {'stim_word': 'car ', 'old_new': 'old', 'yn_keys': 'y'},
      {'stim_word': 'bike', 'old_new': 'old', 'yn_keys': 'y'},
      {'stim_word': 'apple', 'old_new': 'old', 'yn_keys': 'y'},
      {'stim_word': 'orange', 'old_new': 'old', 'yn_keys': 'y'},
      {'stim_word': 'sun', 'old_new': 'old', 'yn_keys': 'y'},
      {'stim_word': 'moon', 'old_new': 'old', 'yn_keys': 'y'},
      {'stim_word': 'earth', 'old_new': 'old', 'yn_keys': 'y'},
      {'stim_word': 'mercury', 'old_new': 'old', 'yn_keys': 'y'},
      {'stim_word': 'tab', 'old_new': 'new', 'yn_keys': 'n'},
      {'stim_word': 'cycle', 'old_new': 'new', 'yn_keys': 'n'},
      {'stim_word': 'star', 'old_new': 'new', 'yn_keys': 'n'},
      {'stim_word': 'venus', 'old_new': 'new', 'yn_keys': 'n'}]
    Routine TestTrial
  LoopTerminator trialsTest
